PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'pilot': '01', 'participant': ''}
  Full-screen window = True
  Monitor = ACER
  Save excel file = True
  Screen = 2
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = Nieboer_eye-tracking-test-battery
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Routines
  Routine routine_3x3
    KeyboardComponent resp_3x3
      allowedKeys = 'left','right','space','1','2','3'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent figs_3x3
      image [set every repeat] = $Figs_3x3
      size = (1.8, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
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  Routine routine_8x8
    KeyboardComponent resp_8x8
      allowedKeys = 'left','right','space','1','2','3'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent figs_8x8
      image [set every repeat] = $Figs_8x8
      size = (1.8, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
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  Routine blank
    PolygonComponent waiting_screen
      fillColor = black
      shape = rectangle
      size = (1.8,1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine routine_15x15
    KeyboardComponent resp_15x15
      allowedKeys = 'left','right','space','1','2','3'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent figs_15x15
      image [set every repeat] = $Figs_15x15
      size = (1.8,1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
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  Routine test
    KeyboardComponent key_resp
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent image
      image = figs\15x15_grid.png
      pos = (0, -0.0075)
      size = (2, 1.125)
      startVal [time (s)] = 0.0
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  Routine familiarisation
    KeyboardComponent resp_fam
      allowedKeys = 'left','right','space','1','2','3'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent figs_fam
      image [set every repeat] = $Fam_3x3
      size = (1.8, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
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  Routine inst_fam_3x3
    PolygonComponent black_background3
      fillColor = black
      shape = rectangle
      size = (1.8, 1)
      startVal [time (s)] = 0.0
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    TextComponent VS_familiarisation_opening
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        VISUAL SEARCH:

        Your task is to determine whether a circle is present among a grid of squares. You have 30 seconds per trial to respond. Press the left arrow key if there is no circle present, press the right arrow key if you find a circle.

        We will now start with 6 practice trials to familiarise you with the task.

        Press the left or right arrow key to start.
    KeyboardComponent resp_familiarisation
      allowedKeys = 'y','n','left','right','space','1','2','3'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instr_3x3
    PolygonComponent black_background4
      fillColor = black
      shape = rectangle
      size = (1.8, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent VS_instruction_done
      allowedKeys = 'y','n','left','right','space', '1','2','3'
      forceEndRoutine = True
      startVal [time (s)] = 5
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    TextComponent instr_test_start
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        We will now begin the test. The first block will be 18 trials with a 3x3 grid, the second block 18 trials with a 8x8 grid and the third and final block 18 trials with a 15x15 grid.

        You can take a short break between blocks if needed.

        If you fully understand the task and you are ready to start, press the right key arrow.
  Routine done
    PolygonComponent black_background16
      fillColor = black
      shape = rectangle
      size = (1.8, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    TextComponent done_txt
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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      text:
        Testing done!

        Thank you.
  Routine motion
    DotsComponent dots
      coherence = 1.0
      dir = 10.0
      dotLife = 3
      dotSize = 10
      fieldPos = (0.0, 0.0)
      fieldShape = circle
      fieldSize = 1.0
      nDots = 100
      noiseDots = direction
      refreshDots = repeat
      signalDots = same
      speed = 0.01
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
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    KeyboardComponent key_resp_4
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Calibration
    PolygonComponent Black_background2
      fillColor = black
      shape = rectangle
      size = (1.8, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent calibration_done
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    PolygonComponent middle
      lineWidth = 5
      shape = circle
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    PolygonComponent top_left
      lineWidth = 5
      pos = (-0.60, 0.3)
      shape = circle
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    PolygonComponent top_right
      lineWidth = 5
      pos = (0.6, 0.3)
      shape = circle
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    PolygonComponent bottom_left
      lineWidth = 5
      pos = (-0.6, -0.3)
      shape = circle
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    PolygonComponent bottom_right
      lineWidth = 5
      pos = (0.6, -0.3)
      shape = circle
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    PolygonComponent M_fill
      fillColor = white
      lineWidth = 2
      opacity [set every repeat] = M_opacity
      shape = circle
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    PolygonComponent TL_fill
      fillColor = white
      lineWidth = 2
      opacity [set every repeat] = TL_opacity
      pos = (-0.60, 0.3)
      shape = circle
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    PolygonComponent TR_fill
      fillColor = white
      lineWidth = 2
      opacity [set every repeat] = TR_opacity
      pos = (0.6, 0.3)
      shape = circle
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    PolygonComponent BR_fill
      fillColor = white
      lineWidth = 2
      opacity [set every repeat] = BR_opacity
      pos = (0.6, -0.3)
      shape = circle
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    PolygonComponent BL_fill
      fillColor = white
      lineWidth = 2
      opacity [set every repeat] = BL_opacity
      pos = (-0.6, -0.3)
      shape = circle
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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  Routine inst_fix
    PolygonComponent black_background6
      fillColor = black
      shape = rectangle
      size = (1.8, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent FS_instruction_done
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 5
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    TextComponent Fixation_stability_instruction
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        FIXATION STABILITY:

        For the next test, you have to fixate as steady as possible on the center of the cross for 30 seconds. Please limit any head or eye movements.
  Routine fix_stab
    PolygonComponent black_background7
      fillColor = black
      shape = rectangle
      size = (1.8, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
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    KeyboardComponent interrupt_FS
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
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    PolygonComponent horizontal
      fillColor = white
      shape = rectangle
      size = (40,1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
      units = deg
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    PolygonComponent vertical
      fillColor = white
      shape = rectangle
      size = (1,20)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
      units = deg
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    PolygonComponent inner_line_horizontal
      fillColor = black
      shape = rectangle
      size = (40,0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
      units = deg
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    PolygonComponent inner_line_vertical
      fillColor = black
      shape = rectangle
      size = (0.4,20)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
      units = deg
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  Routine intro
    PolygonComponent black_background1
      fillColor = black
      shape = rectangle
      size = (1.8, 1)
      startVal [time (s)] = 0.0
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    TextComponent introduction
      letterHeight = 0.025
      startVal [time (s)] = 0.0
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      text:
        This test battery of eye movements was developed by Ward Nieboer, Vrije Universiteit Amsterdam, with the aim to assess visual function in individuals with vision impairment. Eye tracker: Pupil Invisible (Pupil Labs GmbH, Germany)

        The test battery consists of 7 components:
        1) Calibration check
        2) Visual search familiarisation + test
        3) Fixation stability test
        4) Saccades test
        5) Smooth pursuit test
        6) Free viewing photos
        7) Free viewing video

        References:
        Nieboer, W., Ghiani, A., De Vries, R., Brenner, E., & Mann, D. L. (2023). Eye Tracking to Assess the Functional Consequences of Vision Impairment: A Systematic Review. Optometry and Vision Science, 100(12), 861-875.
    KeyboardComponent intro_done
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instr_saccades
    PolygonComponent black_background8
      fillColor = black
      shape = rectangle
      size = (1.8, 1)
      startVal [time (s)] = 0.0
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    TextComponent saccade_test_instructions
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        SACCADES TEST:

        Fixate on the white dot in the center, it will dissapear and reappear at a different location for 2 seconds before returning to the center. Your task is to locate all dots.
    KeyboardComponent SAC_instructions_done
      allowedKeys = 'y','n','left','right','space','1','2','3'
      forceEndRoutine = True
      startVal [time (s)] = 5
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  Routine fix
    PolygonComponent black_background12
      fillColor = black
      shape = rectangle
      size = (1.8,1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    PolygonComponent SP_fixation_target
      fillColor = white
      shape = circle
      size = 1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      units = deg
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  Routine start_sp
    PolygonComponent black_background13
      fillColor = black
      shape = rectangle
      size = (1.8,1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    PolygonComponent stimuli_north_2
      fillColor = white
      opacity [set every repeat] = opacity_north
      pos = (0, 6)
      shape = circle
      size = 1
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
      units = deg
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    PolygonComponent stimuli_east_2
      fillColor = white
      opacity [set every repeat] = opacity_east
      pos = (6, 0)
      shape = circle
      size = 1
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
      units = deg
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    PolygonComponent stimuli_south_2
      fillColor = white
      opacity [set every repeat] = opacity_south
      pos = (0,-6)
      shape = circle
      size = 1
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
      units = deg
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    PolygonComponent stimuli_west_2
      fillColor = white
      opacity [set every repeat] = opacity_west
      pos = (-6, 0)
      shape = circle
      size = 1
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
      units = deg
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  Routine instr_SP
    PolygonComponent black_background11
      fillColor = black
      shape = rectangle
      size = (1.8, 1)
      startVal [time (s)] = 0.0
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    TextComponent SP_instructions_done
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        SMOOTH PURSUIT TEST:

        Fixate on the white dot in the center, it will disappear and reappear at a different location and will move in towards the center of the screen before returning as a central fixation point. Your task is to find and follow the dot.
    KeyboardComponent Smooth_pursuit_instructions
      allowedKeys = 'y','n','left','right','space','1','2','3'
      forceEndRoutine = True
      startVal [time (s)] = 5
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  Routine trial_saccades
    PolygonComponent black_background9
      fillColor = black
      shape = rectangle
      size = (1.8,1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    PolygonComponent SAC_fix_target
      fillColor = white
      shape = circle
      size = 1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      units = deg
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  Routine trial_SP
    PolygonComponent black_background14
      fillColor = black
      shape = rectangle
      size = (1.8,1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.8
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    PolygonComponent stimuli_north
      fillColor = white
      opacity [set every repeat] = opacity_north
      pos [set every frame] = (0, 6-t*10)
      shape = circle
      size = 1
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.25
      units = deg
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    PolygonComponent stimuli_east
      fillColor = white
      opacity [set every repeat] = opacity_east
      pos [set every frame] = (6-t*10, 0)
      shape = circle
      size = 1
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.8
      units = deg
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    PolygonComponent stimuli_south
      fillColor = white
      opacity [set every repeat] = opacity_south
      pos [set every frame] = (0,-6+t*10)
      shape = circle
      size = 1
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.25
      units = deg
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    PolygonComponent stimuli_west
      fillColor = white
      opacity [set every repeat] = opacity_west
      pos [set every frame] = (-6+t*10, 0)
      shape = circle
      size = 1
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.8
      units = deg
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    PolygonComponent SP_fixation_target2
      fillColor = white
      opacity [set every repeat] = opacity_north
      shape = circle
      size = 1
      startVal [time (s)] = 1.25
      stopVal [duration (s)] = 0.55
      units = deg
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    PolygonComponent SP_fixation_target3
      fillColor = white
      opacity [set every repeat] = opacity_south
      shape = circle
      size = 1
      startVal [time (s)] = 1.25
      stopVal [duration (s)] = 0.55
      units = deg
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  Routine saccades
    PolygonComponent black_background10
      fillColor = black
      shape = rectangle
      size = (1.8,1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    PolygonComponent N_6
      fillColor = white
      opacity [set every repeat] = opacity_N6
      pos = (0, 6)
      shape = circle
      size = 1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      units = deg
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    PolygonComponent N_10
      fillColor = white
      opacity [set every repeat] = opacity_N10
      pos = (0, 8)
      shape = circle
      size = 1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      units = deg
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    PolygonComponent E_6
      fillColor = white
      opacity [set every repeat] = opacity_E6
      pos = (6,0)
      shape = circle
      size = 1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      units = deg
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    PolygonComponent E_10
      fillColor = white
      opacity [set every repeat] = opacity_E10
      pos = (10,0)
      shape = circle
      size = 1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      units = deg
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    PolygonComponent S_6
      fillColor = white
      opacity [set every repeat] = opacity_S6
      pos = (0, -6)
      shape = circle
      size = 1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      units = deg
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    PolygonComponent S_10
      fillColor = white
      opacity [set every repeat] = opacity_S10
      pos = (0, -8)
      shape = circle
      size = 1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      units = deg
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    PolygonComponent W_6
      fillColor = white
      opacity [set every repeat] = opacity_W6
      pos = (-6,0)
      shape = circle
      size = 1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      units = deg
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    PolygonComponent W_10
      fillColor = white
      opacity [set every repeat] = opacity_W10
      pos = (-10,0)
      shape = circle
      size = 1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      units = deg
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    PolygonComponent NE_10
      fillColor = white
      opacity [set every repeat] = opacity_NE10
      pos = (6,6)
      shape = circle
      size = 1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      units = deg
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    PolygonComponent SE_10
      fillColor = white
      opacity [set every repeat] = opacity_SE10
      pos = (-6,6)
      shape = circle
      size = 1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      units = deg
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    PolygonComponent SW_10
      fillColor = white
      opacity [set every repeat] = opacity_SW10
      pos = (-6,-6)
      shape = circle
      size = 1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      units = deg
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    PolygonComponent NW_10
      fillColor = white
      opacity [set every repeat] = opacity_NW10
      pos = (-6,6)
      shape = circle
      size = 1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      units = deg
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  Routine instr_free_view
    PolygonComponent black_background15
      fillColor = black
      shape = rectangle
      size = (1.8, 1)
      startVal [time (s)] = 0.0
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    TextComponent instructions_free_view
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        FREE VIEWING:

        For the next two tests, there are no instructions. We will present to you 30 photos with different content, each will be visible for 3 seconds. You can just freely look at the photos. Afterwards, we will play a 1-minute video, and again, you can just freely watch the video.

        Enjoy!
    KeyboardComponent FV_instructions_done
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 5
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  Routine free_viewing_photos
    ImageComponent FV_photo
      image [set every repeat] = $Free_view_figs
      size = (1.8, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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  Routine FV_video
    PolygonComponent black_background17
      fillColor = black
      shape = rectangle
      size = (1.8, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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    KeyboardComponent interrupt_video
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 5
      stopVal [duration (s)] = 55
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    MovieComponent free_view_video
      No audio = True
      backend = moviepy
      forceEndRoutine = False
      movie = Free-view_vid.mp4
      startVal [time (s)] = 2
      stopVal [duration (s)] = 58
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  Routine break_3
    PolygonComponent black_background5
      fillColor = black
      shape = rectangle
      size = (1.8, 1)
      startVal [time (s)] = 0.0
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    TextComponent break1
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = break
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    KeyboardComponent break_over
      allowedKeys = 'y','n','left','right','space', '1','2','3'
      forceEndRoutine = True
      startVal [time (s)] = 5
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Flow
  Routine intro
  LoopInitiator checks loopType="TrialHandler"
    conditionsFile = calibration_opacity.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [{'M_opacity': 0, 'TL_opacity': 0, 'TR_opacity': 0, 'BR_opacity': 0, 'BL_opacity': 0},
      {'M_opacity': 1, 'TL_opacity': 0, 'TR_opacity': 0, 'BR_opacity': 0, 'BL_opacity': 0},
      {'M_opacity': 0, 'TL_opacity': 1, 'TR_opacity': 0, 'BR_opacity': 0, 'BL_opacity': 0},
      {'M_opacity': 0, 'TL_opacity': 0, 'TR_opacity': 1, 'BR_opacity': 0, 'BL_opacity': 0},
      {'M_opacity': 0, 'TL_opacity': 0, 'TR_opacity': 0, 'BR_opacity': 1, 'BL_opacity': 0},
      {'M_opacity': 0, 'TL_opacity': 0, 'TR_opacity': 0, 'BR_opacity': 0, 'BL_opacity': 1},
      {'M_opacity': 0, 'TL_opacity': 1, 'TR_opacity': 0, 'BR_opacity': 0, 'BL_opacity': 0},
      {'M_opacity': 1, 'TL_opacity': 0, 'TR_opacity': 0, 'BR_opacity': 0, 'BL_opacity': 0}]
    Routine Calibration
  LoopTerminator checks
  Routine inst_fam_3x3
  LoopInitiator fam_3x3 loopType="TrialHandler"
    conditionsFile = VS_fam_loop.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Fam_3x3': 'figs/grid3_1.png'},
      {'Fam_3x3': 'figs/grid3_5.png'},
      {'Fam_3x3': 'figs/grid3_9.png'},
      {'Fam_3x3': 'figs/grid3_6.png'},
      {'Fam_3x3': 'figs/3x3_grid.png'},
      {'Fam_3x3': 'figs/3x3_grid.png'}]
    Routine familiarisation
    Routine blank
  LoopTerminator fam_3x3
  Routine instr_3x3
  LoopInitiator trials_3x3 loopType="TrialHandler"
    conditionsFile = VS_figs_loop.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Figs_3x3': 'figs/grid3_1.png', 'Figs_8x8': 'figs/grid8_1.png', 'Figs_15x15': 'figs/grid15_1.png', 'CorrAns': 1},
      {'Figs_3x3': 'figs/grid3_2.png', 'Figs_8x8': 'figs/grid8_2.png', 'Figs_15x15': 'figs/grid15_2.png', 'CorrAns': 1},
      {'Figs_3x3': 'figs/grid3_3.png', 'Figs_8x8': 'figs/grid8_3.png', 'Figs_15x15': 'figs/grid15_3.png', 'CorrAns': 1},
      {'Figs_3x3': 'figs/grid3_4.png', 'Figs_8x8': 'figs/grid8_4.png', 'Figs_15x15': 'figs/grid15_4.png', 'CorrAns': 1},
      {'Figs_3x3': 'figs/grid3_5.png', 'Figs_8x8': 'figs/grid8_5.png', 'Figs_15x15': 'figs/grid15_5.png', 'CorrAns': 1},
      {'Figs_3x3': 'figs/grid3_6.png', 'Figs_8x8': 'figs/grid8_6.png', 'Figs_15x15': 'figs/grid15_6.png', 'CorrAns': 1},
      {'Figs_3x3': 'figs/grid3_7.png', 'Figs_8x8': 'figs/grid8_7.png', 'Figs_15x15': 'figs/grid15_7.png', 'CorrAns': 1},
      {'Figs_3x3': 'figs/grid3_8.png', 'Figs_8x8': 'figs/grid8_8.png', 'Figs_15x15': 'figs/grid15_8.png', 'CorrAns': 1},
      {'Figs_3x3': 'figs/grid3_9.png', 'Figs_8x8': 'figs/grid8_9.png', 'Figs_15x15': 'figs/grid15_9.png', 'CorrAns': 1},
      {'Figs_3x3': 'figs/grid3_3.png', 'Figs_8x8': 'figs/grid8_10.png', 'Figs_15x15': 'figs/grid15_10.png', 'CorrAns': 1},
      {'Figs_3x3': 'figs/grid3_5.png', 'Figs_8x8': 'figs/grid8_11.png', 'Figs_15x15': 'figs/grid15_11.png', 'CorrAns': 1},
      {'Figs_3x3': 'figs/grid3_7.png', 'Figs_8x8': 'figs/grid8_12.png', 'Figs_15x15': 'figs/grid15_12.png', 'CorrAns': 1},
      {'Figs_3x3': 'figs/3x3_grid.png', 'Figs_8x8': 'figs/8x8_grid.png', 'Figs_15x15': 'figs/15x15_grid.png', 'CorrAns': 0}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
    Routine routine_3x3
    Routine blank
  LoopTerminator trials_3x3
  Routine break_3
  LoopInitiator trials_8x8 loopType="TrialHandler"
    conditionsFile = VS_figs_loop.xlsx
    loopType = random
    nReps = 1
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    conditions:
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    Routine routine_8x8
    Routine blank
  LoopTerminator trials_8x8
  Routine break_3
  LoopInitiator trials_15x15 loopType="TrialHandler"
    conditionsFile = VS_figs_loop.xlsx
    loopType = random
    nReps = 1
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    conditions:
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    Routine routine_15x15
    Routine blank
  LoopTerminator trials_15x15
  Routine inst_fix
  Routine fix_stab
  Routine instr_saccades
  LoopInitiator SAC_trials loopType="TrialHandler"
    conditionsFile = SACC_loop.xlsx
    loopType = random
    nReps = 2
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    conditions:
      [{'opacity_N6': 1, 'opacity_N10': 0, 'opacity_E6': 0, 'opacity_E10': 0, 'opacity_S6': 0, 'opacity_S10': 0, 'opacity_W6': 0, 'opacity_W10': 0, 'opacity_NE10': 0, 'opacity_SE10': 0, 'opacity_SW10': 0, 'opacity_NW10': 0},
      {'opacity_N6': 0, 'opacity_N10': 1, 'opacity_E6': 0, 'opacity_E10': 0, 'opacity_S6': 0, 'opacity_S10': 0, 'opacity_W6': 0, 'opacity_W10': 0, 'opacity_NE10': 0, 'opacity_SE10': 0, 'opacity_SW10': 0, 'opacity_NW10': 0},
      {'opacity_N6': 0, 'opacity_N10': 0, 'opacity_E6': 1, 'opacity_E10': 0, 'opacity_S6': 0, 'opacity_S10': 0, 'opacity_W6': 0, 'opacity_W10': 0, 'opacity_NE10': 0, 'opacity_SE10': 0, 'opacity_SW10': 0, 'opacity_NW10': 0},
      {'opacity_N6': 0, 'opacity_N10': 0, 'opacity_E6': 0, 'opacity_E10': 1, 'opacity_S6': 0, 'opacity_S10': 0, 'opacity_W6': 0, 'opacity_W10': 0, 'opacity_NE10': 0, 'opacity_SE10': 0, 'opacity_SW10': 0, 'opacity_NW10': 0},
      {'opacity_N6': 0, 'opacity_N10': 0, 'opacity_E6': 0, 'opacity_E10': 0, 'opacity_S6': 1, 'opacity_S10': 0, 'opacity_W6': 0, 'opacity_W10': 0, 'opacity_NE10': 0, 'opacity_SE10': 0, 'opacity_SW10': 0, 'opacity_NW10': 0},
      {'opacity_N6': 0, 'opacity_N10': 0, 'opacity_E6': 0, 'opacity_E10': 0, 'opacity_S6': 0, 'opacity_S10': 1, 'opacity_W6': 0, 'opacity_W10': 0, 'opacity_NE10': 0, 'opacity_SE10': 0, 'opacity_SW10': 0, 'opacity_NW10': 0}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
    Routine trial_saccades
    Routine saccades
  LoopTerminator SAC_trials
  Routine instr_SP
  LoopInitiator SP_trials loopType="TrialHandler"
    conditionsFile = SP_loop.xlsx
    loopType = random
    nReps = 5
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    conditions:
      [{'opacity_north': 1, 'opacity_east': 0, 'opacity_south': 0, 'opacity_west': 0},
      {'opacity_north': 0, 'opacity_east': 1, 'opacity_south': 0, 'opacity_west': 0},
      {'opacity_north': 0, 'opacity_east': 0, 'opacity_south': 1, 'opacity_west': 0},
      {'opacity_north': 0, 'opacity_east': 0, 'opacity_south': 0, 'opacity_west': 1}]
    Routine fix
    Routine start_sp
    Routine trial_SP
  LoopTerminator SP_trials
  Routine instr_free_view
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = FV_loop.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'Free_view_figs': 'FV_figs/autumn.jpg'},
      {'Free_view_figs': 'FV_figs/1801596.jpg'},
      {'Free_view_figs': 'FV_figs/flamingo.jpg'},
      {'Free_view_figs': 'FV_figs/bee.jpg'},
      {'Free_view_figs': 'FV_figs/1804322.jpg'},
      {'Free_view_figs': 'FV_figs/bench.jpg'},
      {'Free_view_figs': 'FV_figs/butterflyfish.jpg'},
      {'Free_view_figs': 'FV_figs/buildings.jpg'},
      {'Free_view_figs': 'FV_figs/1806144.jpg'},
      {'Free_view_figs': 'FV_figs/drums.jpg'},
      {'Free_view_figs': 'FV_figs/gorilla.jpg'},
      {'Free_view_figs': 'FV_figs/hills.jpg'},
      {'Free_view_figs': 'FV_figs/race_car.jpg'},
      {'Free_view_figs': 'FV_figs/1806444.jpg'},
      {'Free_view_figs': 'FV_figs/lizard.jpg'},
      {'Free_view_figs': 'FV_figs/tourists.jpg'},
      {'Free_view_figs': 'FV_figs/otter.jpg'},
      {'Free_view_figs': 'FV_figs/tram.jpg'},
      {'Free_view_figs': 'FV_figs/1800690.jpg'},
      {'Free_view_figs': 'FV_figs/skyscrapers.jpg'},
      {'Free_view_figs': 'FV_figs/shepherds.jpg'},
      {'Free_view_figs': 'FV_figs/18066665.jpg'},
      {'Free_view_figs': 'FV_figs/snails.jpg'},
      {'Free_view_figs': 'FV_figs/1803200.jpg'},
      {'Free_view_figs': 'FV_figs/fishes.jpg'},
      {'Free_view_figs': 'FV_figs/zebra.jpg'},
      {'Free_view_figs': 'FV_figs/city.jpg'},
      {'Free_view_figs': 'FV_figs/1801064.jpg'},
      {'Free_view_figs': 'FV_figs/elephants.jpg'},
      {'Free_view_figs': 'FV_figs/flower.jpg'}]
    Routine free_viewing_photos
  LoopTerminator trials
  Routine break_3
  Routine FV_video
  Routine done
